begintemplate FScell

public is_art
public init, topol, basic_shape, subsets, /*geom,*/ biophys//,   geom_nseg
public pre_list, connect2target
public x, y, z, position
public all, soma,/* axon,*/ dend, /*axonal,*/ basal_prox, basal_dist
public dendproxNo, denddistNo
public unscrProx, unscrDist


objref pre_list

proc init() {
  topol()
  subsets()
  //geom()
  biophys()
 // geom_nseg()
  pre_list = new List()
 // synapses()
  x = y = z = 0 // only change via position //aleka vladimirov 2013
}


create soma
//create axon[879]
create dend[63]

proc topol_1() {
  connect dend[0](0),soma(1)
  connect dend[1](0),dend[0](1)
  connect dend[2](0),dend[1](1)
  connect dend[3](0),dend[2](1)
  connect dend[4](0),soma(1)
  connect dend[5](0),dend[4](1)
  connect dend[6](0),dend[5](1)
  connect dend[7](0),dend[1](1)
  connect dend[8](0),dend[0](1)
  connect dend[9](0),dend[8](1)
  connect dend[10](0),dend[8](1)
  connect dend[11](0),soma(1)
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}
/*proc topol_991() {
  connect axon[0](0),soma(1)
  connect axon[1](0),axon[0](1)
  connect axon[2](0),axon[1](1)
  connect axon[3](0),axon[2](1)
  connect axon[4](0),axon[3](1)
  connect axon[5](0),axon[4](1)
  connect axon[6](0),axon[5](1)
  connect axon[7](0),axon[6](1)
  connect axon[8](0),axon[7](1)
  connect axon[9](0),axon[8](1)
  connect axon[10](0),axon[9](1)
  connect axon[11](0),axon[10](1)
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}
proc topol_992() {
  connect axon[249](0),axon[248](1)
  connect axon[250](0),axon[248](1)
  connect axon[251](0),axon[250](1)
  connect axon[252](0),axon[250](1)
  connect axon[253](0),axon[245](1)
  connect axon[254](0),axon[253](1)
  connect axon[255](0),axon[253](1)
  connect axon[256](0),axon[224](1)
  connect axon[257](0),axon[256](1)
  connect axon[258](0),axon[256](1)
  connect axon[259](0),axon[258](1)
  connect axon[260](0),axon[258](1)
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}
proc topol_993() {
  connect axon[498](0),axon[497](1)
  connect axon[499](0),axon[498](1)
  connect axon[500](0),axon[498](1)
  connect axon[501](0),axon[497](1)
  connect axon[502](0),axon[496](1)
  connect axon[503](0),axon[502](1)
  connect axon[504](0),axon[502](1)
  connect axon[505](0),axon[504](1)
  connect axon[506](0),axon[504](1)
  connect axon[507](0),axon[506](1)
  connect axon[508](0),axon[507](1)
  connect axon[509](0),axon[508](1)
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}
proc topol_994() {
  connect axon[747](0),axon[746](1)
  connect axon[748](0),axon[746](1)
  connect axon[749](0),axon[745](1)
  connect axon[750](0),axon[749](1)
  connect axon[751](0),axon[749](1)
  connect axon[752](0),axon[744](1)
  connect axon[753](0),axon[695](1)
  connect axon[754](0),axon[390](1)
  connect axon[755](0),axon[754](1)
  connect axon[756](0),axon[754](1)
  connect axon[757](0),axon[756](1)
  connect axon[758](0),axon[757](1)
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}*/

proc topol() {
  topol_1()
 /* topol_991()
  topol_992()
  topol_993()
  topol_994()*/
  basic_shape()
}

proc shape3d_1() {
  soma {pt3dclear()
    pt3dadd(-0.0001, 0, 0, 12.5158)
    pt3dadd(0, 0, 0, 12.5158)
    pt3dadd(-0.21, -0.25, 2.54, 14.4836)
    pt3dadd(-1.03, 0.17, 4.79, 15.9434)
    pt3dadd(-0.73, -0.2, 8.44, 15.7972)
    pt3dadd(-0.03, -1.14, 13.55, 11.1498)
    pt3dadd(-1.23, -1.73, 15.64, 9.0552)
    pt3dadd(-0.59, -0.28, -0.64, 4.0232)
    pt3dadd(-0.22, -0.62, 16.64, 4.028)
  }
  dend[0] {pt3dclear()
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  }
}
proc shape3d_2() {
  dend[9] {
    pt3dadd(-64.92, 138.55, 25.64, 0.18)
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  }
}
proc shape3d_3() {
  dend[19] {
    pt3dadd(151.69, 317, 44.86, 0.18)
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  }
}
proc shape3d_4() {
  dend[28] {
    pt3dadd(21.94, -35.24, -36.86, 0.91)
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  }
}
proc shape3d_5() {
  dend[35] {
    pt3dadd(42.49, -22.81, 16.12, 0.36)
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  }
}
proc shape3d_6() {
  dend[38] {
    pt3dadd(204.21, 294.61, 164.82, 0.18)
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  }
}
proc shape3d_7() {
  dend[44] {
    pt3dadd(-39.14, 248.84, -43.34, 0.36)
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  }
}
proc shape3d_8() {
  dend[54] {
    pt3dadd(-9.5, 252.33, -40.79, 0.36)
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  }
}
proc shape3d_9() {
  dend[58] {
    pt3dadd(41.58, 305.61, 27.71, 0.18)
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  }
}
/*proc shape3d_991() {

  axon[0] {pt3dclear()
    pt3dadd(1.1, 0.69, -24.78, 0.054)
    pt3dadd(2.18, -3.71, -14.6, 2.15)
    pt3dadd(2.21, -4.39, -14.48, 2.15)
    pt3dadd(2.23, -5.08, -13.56, 2.15)
    pt3dadd(2.23, -5.08, -13.27, 2.15)
    pt3dadd(2.37, -5.98, -11.89, 2.15)
    pt3dadd(2.47, -6.79, -11.32, 2.15)
    pt3dadd(2.71, -7.55, -10.86, 2.15)
    pt3dadd(2.93, -8.13, -10.28, 2.15)
    pt3dadd(3.17, -8.87, -7.76, 2.15)
    pt3dadd(3.28, -9.25, -5.86, 2.15)
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  }
}
proc shape3d_992() {
  axon[9] {
    pt3dadd(17.39, -6.41, -53.95, 0.07)
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  }
}
proc shape3d_993() {
  axon[21] {
    pt3dadd(-103.78, -110.28, -79.69, 0.3)
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  }
}
proc shape3d_994() {
  axon[36] {
    pt3dadd(-58.27, -39.86, -13.34, 0.22)
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  }
}
proc shape3d_995() {
  axon[49] {
    pt3dadd(-47.86, 90.16, -32.15, 0.22)
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  }
}
proc shape3d_996() {
  axon[63] {
    pt3dadd(59.48, 35.54, -55.72, 0.3)
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  }
}
proc shape3d_997() {
  axon[76] {
    pt3dadd(50.54, -129.38, 93.47, 0.3)
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  }
}
proc shape3d_998() {
  axon[84] {
    pt3dadd(176.51, -164.19, 98.45, 0.07)
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  }
}
proc shape3d_999() {
  axon[98] {
    pt3dadd(132.15, -226.73, 170.58, 0.22)
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  }
}
proc shape3d_9910() {
  axon[106] {
    pt3dadd(324.6, -363.62, 264.14, 0.22)
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  }
}
proc shape3d_9911() {
  axon[119] {
    pt3dadd(79.49, -154.57, 57.52, 0.22)
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  }
}
proc shape3d_9912() {
  axon[138] {
    pt3dadd(68.08, -165.2, 141.64, 0.15)
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  }
}
proc shape3d_9913() {
  axon[155] {
    pt3dadd(164.05, -228.46, 172.97, 0.3)
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  }
}
proc shape3d_9914() {
  axon[166] {
    pt3dadd(237.4, -303.94, 198.85, 0.22)
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  }
}
proc shape3d_9915() {
  axon[181] {
    pt3dadd(219.93, -238.29, 157.71, 0.3)
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  }
}
proc shape3d_9916() {
  axon[189] {
    pt3dadd(227.28, -197.86, 145.13, 0.52)
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  }
}
proc shape3d_9917() {
  axon[203] {
    pt3dadd(267.59, -215.68, 150.05, 0.3)
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  }
}
proc shape3d_9918() {
  axon[224] {
    pt3dadd(224.58, -125.84, 136.53, 0.3)
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  }
}
proc shape3d_9919() {
  axon[237] {
    pt3dadd(275.01, -193.24, 135.78, 0.22)
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  }
}
proc shape3d_9920() {
  axon[245] {
    pt3dadd(262.31, -124.35, 139.44, 0.3)
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  }
}
proc shape3d_9921() {
  axon[264] {
    pt3dadd(194.28, -123.9, 125.34, 0.3)
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  }
}
proc shape3d_9922() {
  axon[280] {
    pt3dadd(39.03, -140.83, 91.55, 0.59)
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  }
}
proc shape3d_9923() {
  axon[294] {
    pt3dadd(-31.79, -145.77, 85.37, 0.3)
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  }
}
proc shape3d_9924() {
  axon[302] {
    pt3dadd(7.86, -112.59, 196.38, 0.52)
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  }
}
proc shape3d_9925() {
  axon[314] {
    pt3dadd(74.35, -168.53, 171.8, 0.15)
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  }
}
proc shape3d_9926() {
  axon[326] {
    pt3dadd(39.3, -223.84, 183.75, 0.3)
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  }
}
proc shape3d_9927() {
  axon[346] {
    pt3dadd(18.95, -181.26, 137.75, 0.3)
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  }
}
proc shape3d_9928() {
  axon[365] {
    pt3dadd(45.74, -208.22, 149.58, 0.15)
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  }
}
proc shape3d_9929() {
  axon[375] {
    pt3dadd(57.32, -165.24, 129.05, 0.3)
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  }
}
proc shape3d_9930() {
  axon[395] {
    pt3dadd(-14.74, -110.24, 71.2, 0.3)
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  }
}
proc shape3d_9931() {
  axon[399] {
    pt3dadd(-135.52, -108.54, 63.72, 0.3)
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  }
}
proc shape3d_9932() {
  axon[405] {
    pt3dadd(-41.19, -111.5, 83.47, 0.3)
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  }
}
proc shape3d_9933() {
  axon[414] {
    pt3dadd(-181.16, -82.53, 91.86, 0.37)
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  }
}
proc shape3d_9934() {
  axon[426] {
    pt3dadd(-183.88, -116.58, 144.6, 0.22)
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  }
}
proc shape3d_9935() {
  axon[444] {
    pt3dadd(-154.89, -104.86, 148.25, 0.37)
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  }
}
proc shape3d_9936() {
  axon[455] {
    pt3dadd(-124.96, -84.43, 150.97, 0.37)
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  }
}
proc shape3d_9937() {
  axon[467] {
  }
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  }
}
proc shape3d_9938() {
  axon[478] {
    pt3dadd(-165.57, -110.03, 169.25, 0.3)
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  }
}
proc shape3d_9939() {
  axon[492] {
    pt3dadd(-277.93, -112.34, 240.8, 0.3)
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  }
}
proc shape3d_9940() {
  axon[505] {
  }
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  }
}
proc shape3d_9941() {
  axon[518] {
  }
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  }
}
proc shape3d_9942() {
  axon[533] {
    pt3dadd(-163.32, -154.73, 177.49, 0.52)
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  }
}
proc shape3d_9943() {
  axon[543] {
    pt3dadd(-95.91, -156.33, 143.38, 0.07)
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  }
}
proc shape3d_9944() {
  axon[554] {
    pt3dadd(-175.95, -87.25, 147.16, 0.59)
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  }
}
proc shape3d_9945() {
  axon[566] {
    pt3dadd(-253.56, -85.74, 169.42, 0.22)
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  }
}
proc shape3d_9946() {
  axon[579] {
    pt3dadd(-491.36, 37.06, 213.91, 0.07)
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  }
}
proc shape3d_9947() {
  axon[587] {
  }
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  }
}
proc shape3d_9948() {
  axon[594] {
    pt3dadd(-196.41, -79.94, 132.08, 0.44)
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  }
}
proc shape3d_9949() {
  axon[605] {
    pt3dadd(-193.23, -87.92, 133.86, 0.44)
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  }
}
proc shape3d_9950() {
  axon[620] {
    pt3dadd(-129.71, -107.97, 148.13, 0.44)
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  }
}
proc shape3d_9951() {
  axon[631] {
    pt3dadd(-33.06, -108.79, 143.78, 0.44)
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  }
}
proc shape3d_9952() {
  axon[643] {
  }
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  }
}
proc shape3d_9953() {
  axon[661] {
    pt3dadd(-30.1, -204.45, 204.75, 0.3)
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  }
}
proc shape3d_9954() {
  axon[670] {
    pt3dadd(-93.43, -151.86, 241.1, 0.44)
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  }
}
proc shape3d_9955() {
  axon[679] {
    pt3dadd(-26.62, -145.7, 185.25, 0.37)
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  }
}
proc shape3d_9956() {
  axon[693] {
    pt3dadd(-73.98, -52.5, 59.36, 0.37)
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  }
}
proc shape3d_9957() {
  axon[705] {
    pt3dadd(-105.56, 52.09, -46.61, 0.3)
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  }
}
proc shape3d_9958() {
  axon[721] {
    pt3dadd(-172.28, 65.72, -66.59, 0.37)
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  }
}
proc shape3d_9959() {
  axon[732] {
    pt3dadd(-207.16, 100.24, -120.23, 0.3)
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  }
}
proc shape3d_9960() {
  axon[746] {
    pt3dadd(-39.16, 60.13, -124.34, 0.15)
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  }
}
proc shape3d_9961() {
  axon[754] {
    pt3dadd(-0.42, -74.99, 53.59, 0.96)
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  }
}
proc shape3d_9962() {
  axon[770] {
    pt3dadd(105.47, -187, 157.94, 0.59)
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  }
}
proc shape3d_9963() {
  axon[781] {
    pt3dadd(148.98, -221.18, 147.33, 0.22)
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  }
}
proc shape3d_9964() {
  axon[794] {
    pt3dadd(274.45, -281.38, 175.69, 0.22)
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  }
}
proc shape3d_9965() {
  axon[806] {
    pt3dadd(326.73, -362.19, 291.91, 0.37)
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  }
}
proc shape3d_9966() {
  axon[818] {
    pt3dadd(368.81, -389.43, 327.57, 0.15)
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  }
}
proc shape3d_9967() {
  axon[829] {
    pt3dadd(164.82, -242.42, 144.36, 0.22)
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  }
}
proc shape3d_9968() {
  axon[838] {
    pt3dadd(127.96, -260.46, 160.21, 0.3)
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  }
}
proc shape3d_9969() {
  axon[847] {
    pt3dadd(84.8, -208.69, 140.49, 0.44)
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  }
}
proc shape3d_9970() {
  axon[862] {
  }
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  }*/
//}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
 /* shape3d_991()
  shape3d_992()
  shape3d_993()
  shape3d_994()
  shape3d_995()
  shape3d_996()
  shape3d_997()
  shape3d_998()
  shape3d_999()
  shape3d_9910()
  shape3d_9911()
  shape3d_9912()
  shape3d_9913()
  shape3d_9914()
  shape3d_9915()
  shape3d_9916()
  shape3d_9917()
  shape3d_9918()
  shape3d_9919()
  shape3d_9920()
  shape3d_9921()
  shape3d_9922()
  shape3d_9923()
  shape3d_9924()
  shape3d_9925()
  shape3d_9926()
  shape3d_9927()
  shape3d_9928()
  shape3d_9929()
  shape3d_9930()
  shape3d_9931()
  shape3d_9932()
  shape3d_9933()
  shape3d_9934()
  shape3d_9935()
  shape3d_9936()
  shape3d_9937()
  shape3d_9938()
  shape3d_9939()
  shape3d_9940()
  shape3d_9941()
  shape3d_9942()
  shape3d_9943()
  shape3d_9944()
  shape3d_9945()
  shape3d_9946()
  shape3d_9947()
  shape3d_9948()
  shape3d_9949()
  shape3d_9950()
  shape3d_9951()
  shape3d_9952()
  shape3d_9953()
  shape3d_9954()
  shape3d_9955()
  shape3d_9956()
  shape3d_9957()
  shape3d_9958()
  shape3d_9959()
  shape3d_9960()
  shape3d_9961()
  shape3d_9962()
  shape3d_9963()
  shape3d_9964()
  shape3d_9965()
  shape3d_9966()
  shape3d_9967()
  shape3d_9968()
  shape3d_9969()
  shape3d_9970()*/
}

objref all
//objref axonal
objref basal_prox, basal_dist
objref unscrProx, unscrDist
unscrProx = new Vector()
unscrDist = new Vector()



proc subsets() { local ward, dist, i, j 
	objref all
 // objref axonal
objref basal_prox, basal_dist
objref unscrProx, unscrDist
unscrProx = new Vector()
unscrDist = new Vector()

 /* axonal = new SectionList()
  for ward = 0,878 axon[ward] {
    axonal.append()

  }*/
  basal_prox = new SectionList()
  basal_dist = new SectionList()
  soma{distance()}

  j=0
  i=0
//print "Denrite No!"
  for ward = 0, 62 dend[ward] {

 //print "DIAMETER    ", dend[ward].diam       // print the total length
         //   print "lENGTH   ", dend[ward].L       // print the total length
    dend[ward]{ dist = distance(0.5) }
//print dist
    if ( dist <= 100 ){
      basal_prox.append()
   //  print  "1"
                        //print dend[ward].diam(0.5)
      unscrProx.append(ward)
      
    }else{
      basal_dist.append()
   // print  "0"
                      //  print dend[ward].diam(0.5)
      unscrDist.append(ward)
      
    }

  }
all = new SectionList()
  soma all.append()
 // axonal all.append()
  basal_prox all.append()
  basal_dist all.append()
  
}




//proc geom() {
//}
//proc geom_nseg() {
//}
proc biophys() {



		dendproxNo=0
		denddistNo=0
		

	//Create public members for the number of proximal (distal) dendrites,
	//accessible through dot notation (i.e. myFS.dendproxNo):
		forsec basal_prox dendproxNo = dendproxNo + 1
		forsec basal_dist denddistNo = denddistNo + 1

	//Define electrophysiological properties:
		//..........................................................................................................................................................................
		soma_Nafin= 0.045/*//*0.025//0.060*3*/                                      
		soma_kdrin=0.018*2//*0.028//0.0018*2
		soma_Kslowin=0.000725/*//*0.1//*0.00006*0.1//0.000725*0.1 //*0.1 9/12/15*/
		soma_hin=0.00001/*//*10//*100//*100//*100//*/                                                    
		soma_kapin=0.0032//*2//*0.1//*2//*0.001
		soma_can=0.0003//*2 alexandra 17/12/2015
		soma_cat=0.001*2 //for dends
		soma_kctin=0.0001//*10//100//*100//*10                   
		soma_kcain=20*0.001//..001//0.5//*0   
		v_init=-68         
		//...........................................................................................................................................................................

		soma {
		
		        nseg= 5 //1 12/16
			insert pas
			cm=1.2//microF/cm2
			g_pas =1/7600                               
			e_pas = v_init
			Ra=172 //(Noerenberg et al, 2010 PNAS)

		insert Nafx
			gnafbar_Nafx= soma_Nafin*0.8*11

			insert kdrin
			gkdrbar_kdrin= soma_kdrin*1.2

			insert IKsin	
			gKsbar_IKsin= soma_Kslowin

			insert hin
			gbar_hin=soma_hin//ahp polla

			insert kapin
			gkabar_kapin=soma_kapin

			insert kctin
			gkcbar_kctin=soma_kctin

			insert kcain
			gbar_kcain=soma_kcain//ahp gia ena

		          
		         insert cadynin // cai
		       

		}

			                
		/*forsec axonal {
		
		        nseg=10          //the key to success! ALEKA TO EIXES 10
			insert pas
			cm=1.2
			g_pas =1/281600
			e_pas = v_init
			Ra=172

			insert Nafx
			gnafbar_Nafx=soma_Nafin*0.8*36
						                                                                    
			insert kdrin
			gkdrbar_kdrin=soma_kdrin*4

		}
		      
		forsec basal_prox {
		
		        nseg=5
			insert pas
			cm=1.2//microF/cm2
			g_pas =1/7600  
			e_pas = v_init                                            
			Ra=142

			insert Nafx
			gnafbar_Nafx=soma_Nafin*0.4//*0.8//*1.2

			insert kdrin
			gkdrbar_kdrin=0.018*0.5
                        
                        insert kapin
			gkabar_kapin=soma_kapin*0.2//*1.2  //IA current for basal proximal dendrites                                                      

			insert can 
			gcabar_can = soma_can

			insert cat
			gcatbar_cat=soma_cat*0.1
		  
		        insert cal
		        gcalbar_cal=0.00003   // L type calcium channel

		        insert cadynin
		     
		}*/


		forsec basal_dist {
		
		        nseg=5
			insert pas
			cm=1.2           //microF/cm2
			g_pas =1/74300 
			e_pas = v_init                                            
			Ra=142

			insert Nafx
			gnafbar_Nafx=soma_Nafin*0.4*0.8//*0.8//*1.2

			insert kdrin
			gkdrbar_kdrin=0.018*0.5                                           
		        
                        insert kadin
                        gkabar_kadin=1.8*0.0018//*1.2      // IA current used in distal regions >100 microns from the soma
		       
            insert cat
			gcatbar_cat=soma_cat*0.1

			insert can
			gcabar_can=soma_can
		    
		        insert cal
		        gcalbar_cal=0.00003 
		          
		       insert cadynin
		       }	
	       
		ko0_k_ion = 3.82   //mM
		ki0_k_ion = 140    //mM  
	
	
	//aleka
  /* aleka vladimirov 2013*/

  forsec all {                                   //vladimirov egrafe forall
	insert extracellular
	xraxial =  1e+09
	xraxial[1] =  1e+09
	xg = 1e+09
	xg[1] = 1e+09
	xc = 0
	xc[1] = 0
	e_extracellular = 0 
	} 
	} //end biophys()
	


proc position() { local i
  soma for i = 0, n3d()-1 {
    pt3dchange(i, $1-x+x3d(i), $2-y+y3d(i), $3-z+z3d(i), diam3d(i))
  }
  x = $1  y = $2  z = $3
}

func is_art() { return 0 }


endtemplate FScell











